PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = builder_test_TPL
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine calibration
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        tracker.calibrate(win)
        win.flip()
  Routine start_recording
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        # Confirm Lab is ready
        state = ttl.get_state()
        assert state['state'] == 'ready', state['state']

        participant_id = str(participant_info['participant_id'])

        # Start recording (keep Pro Lab on the Record tab!)
        rec = ttl.start_recording(
            "image_viewing",
            participant_id,
            screen_width=int(win.size[0]),
            screen_height=int(win.size[1])
        )
  Routine Trial
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    ImageComponent stim_img
      image [set every repeat] = $image_file
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
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    CodeComponent trial
      Code Type = Py
      Begin Routine:
        # Ensure the current image exists in Pro Lab media list; otherwise upload it
        #import os
        file_name = image_file                     # e.g., "im1.jpeg" from conditions
        base_name = Path(file_name).stem  # "im1" from "im1.jpeg"

        # Lookup or upload media
        if base_name not in media_cache:
            # If not found, upload; if found, get its media_id
            if not ttl.find_media(file_name):
                info = ttl.upload_media(file_name, "image")  # returns dict info
                media_cache[base_name] = info['media_id']
                print(f'Uploaded media {file_name}')
            else:
                uploaded_media = ttl.list_media()['media_list']
                for m in uploaded_media:
                    if base_name == m['media_name']:
                        media_cache[base_name] = m['media_id']
                        break

        # Optionally add AOI to the first image once
        if not aoi_added:
            aoi_name = 'test'
            aoi_color = 'AAC333'  # hex without '#'
            vertices = ((100, 100),
                        (100, 200),
                        (200, 200),
                        (200, 100))
            ttl.add_aois_to_image(
                media_cache[base_name],
                aoi_name, aoi_color,
                vertices,
                tag_name='test_tag',
                group_name='test_group'
            )
            aoi_added = True

        # Prepare onset/offset logging for this trial
        t_onset = None
        t_offset = None
        curr_media_id = media_cache[base_name]
      Each Frame:
        # Log stimulus onset at the exact frame the image starts
        if stim_img.status == STARTED and t_onset is None:
            t_onset = int(ttl.get_time_stamp()['timestamp'])

        # Log stimulus offset at the exact frame the image finishes
        if stim_img.status == FINISHED and t_offset is None:
            t_offset = int(ttl.get_time_stamp()['timestamp'])
      End Routine:
        # Ensure offsets are always recorded
        if t_offset is None:
            t_offset = int(ttl.get_time_stamp()['timestamp'])

        # Send event to Pro Lab
        is_last = (trials.thisN == trials.nTotal - 1)

        # Convert timestamps (ensure numeric ints)
        onset = int(t_onset)
        offset = None
        if t_offset is not None:
            offset = int(t_offset)

        if is_last:
            # MUST send end_timestamp for last event!
            ttl.send_stimulus_event(
                rec['recording_id'],
                onset,
                curr_media_id,
                end_timestamp=offset
            )
        else:
            ttl.send_stimulus_event(
                rec['recording_id'],
                onset,
                curr_media_id
            )
  Routine stop_recording
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    CodeComponent code_3
      Code Type = Py
      End Routine:
        ttl.stop_recording()
  Routine init_1
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    CodeComponent init
      Code Type = Py
      Begin Experiment:
        # --- Imports and setup ---
        #import os
        from pathlib import Path
        from titta import Titta, helpers_tobii as helpers
        from titta.TalkToProLab import TalkToProLab

        # Eye tracker selection
        et_name = 'Tobii Pro Spark'  # or 'IS4_Large_Peripheral', 'Tobii Pro Spectrum'
        settings = Titta.get_defaults(et_name)

        # Use the participant from expInfo if you show the dialog; else hardcode
        # (Builder automatically provides expInfo if you enabled the dialog in settings)
        pid = expInfo.get('participant', 'P001')
        settings.FILENAME = pid

        dummy_mode = False
        project_name = None  # if None, Pro Lab uses currently opened project

        # --- Connect to tracker ---
        tracker = Titta.Connect(settings)
        if dummy_mode:
            tracker.set_dummy_mode()
        tracker.init()

        # --- Talk to Pro Lab ---
        ttl = TalkToProLab(project_name=project_name, dummy_mode=dummy_mode)
        participant_info = ttl.add_participant(pid)

        # Caches / globals used across routines
        media_cache = {}   # {base_name: media_id}
        aoi_added = False  # add AOI once
        rec = None         # recording handle
      End Experiment:
        # Finalize & disconnect
        if rec is not None:
            ttl.finalize_recording(rec['recording_id'])
        ttl.disconnect()
        # Optional: tracker.deinit() if needed by your device/driver version
Flow
  Routine init_1
  Routine calibration
  Routine start_recording
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('image_file', 'im1.jpeg')]),
      OrderedDict([('image_file', 'im2.jpeg')]),
      OrderedDict([('image_file', 'im3.jpeg')])]
    Routine Trial
  LoopTerminator trials
  Routine stop_recording
